PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1326, 746]
  consoleLoggingLevel = error
  expName = animal_words
  keyboardBackend = PsychToolbox
  runMode = 1
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  frameRateMsg:
    Welcome to the Auditory-Visual Matching Task.

     On each trial, you will simultaneously HEAR an animal sound through your headphones and SEE two image choices on the screen.

    Use the mouse to CLICK on the image that correctly matches the sound.

     Respond as quickly and accurately as possible.



    Press the [SPACEBAR] to begin the experiment.
Routines
  Routine trial
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    PolygonComponent right_rectangle
      fillColor = white
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent s_rectangle
      fillColor = white
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent s_image1
      image [set every repeat] = $s_image
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_image
      image [set every repeat] = $r_image
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent trial_sound
      forceEndRoutine = False
      sound [set every repeat] = $target_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.59
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    MouseComponent trial_mouse
      clickable = s_image1, right_image, s_rectangle, right_rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start
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    PolygonComponent start_s_rect
      fillColor = white
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent start_r_rect
      fillColor = white
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent start_s_image
      image [set every repeat] = $s_image
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent start_r_image_
      image [set every repeat] = $r_image
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent star
      fillColor = yellow
      lineColor = yellow
      shape = star7
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent start_mouse
      clickable = star
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 20
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    conditions:
      [OrderedDict([('s_image', 'dog.jpg'), ('r_image', 'horse.jpg'), ('target_sound', 'dog.wav.mp3'), ('correct', 'dog.jpg')]),
      OrderedDict([('s_image', 'penguin.jpg'), ('r_image', 'tiger.jpg'), ('target_sound', 'tiger.wav.mp3'), ('correct', 'tiger.jpg')]),
      OrderedDict([('s_image', 'horse.jpg'), ('r_image', 'dog.jpg'), ('target_sound', 'horse.wav.mp3'), ('correct', 'horse.jpg')]),
      OrderedDict([('s_image', 'tiger.jpg'), ('r_image', 'penguin.jpg'), ('target_sound', 'penguin.wav.mp3'), ('correct', 'penguin.jpg')])]
    Routine start
    Routine trial
  LoopTerminator trials
